PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Show info dlg = False
  expName = production_task
  Screen = 1
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Routines
  Routine trial
    TextComponent targetWord
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text [set every repeat]:
        "Ik wou dat je '" + word$ +"' oplas."
    CodeComponent code
      Each Frame:
        pauseKey = event.getKeys()
        txt = visual.TextStim(win,text='(Druk op V om weer verder te gaan.)')
        if 'p' in pauseKey:
          td = win._toDraw
          win._toDraw = []  # hides whatever was being auto-drawn
          while not event.getKeys(keyList=['v']):
            txt.draw()
            win.flip()
          win._toDraw = td  # restore auto-draw
          pauseKey = NOT_STARTED
          pauseKey = []

        if 'escape' in pauseKey:
            core.quit()
  Routine training
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Om te oefenen zijn hier eerst tien proefzinnen.


        (Druk op de spatiebalk om te beginnen.)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent endMessage
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Klaar!

        Hartelijk dank voor je medewerking.
  Routine break_3
    TextComponent intro_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Tijd voor een pauze!


        (Druk op de spatiebalk om weer verder te gaan.)
    KeyboardComponent response_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent intro
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Goed. Wacht op eventueel commentaar.

        (Druk daarna op de spatiebalk om verder te gaan.)
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine training
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = 1_training.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_4
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 1_conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine break_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = 1_conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_2
  Routine break_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = 1_conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_3
  Routine end
